CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:3
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:dapi
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "lrp8")
    Name to assign these images:lrp8
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "igfbpl1")
    Name to assign these images:lgfbpl1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "gad2")
    Name to assign these images:gad2
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/dsuno/Documents/FT%20Lab/SP23/Expt9.7%20positive%20selection/Expt9.7%20positive%20selection%20images/p35m2%20lrp8.tif
    Name to assign this image:lrp8Tune
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/dsuno/Documents/FT%20Lab/SP23/Expt9.7%20positive%20selection/Expt9.7%20positive%20selection%20images/p35m1%20igfbpl1.tif
    Name to assign this image:lgfbpl1Tune
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/dsuno/Documents/FT%20Lab/SP23/Expt9.7%20positive%20selection/Expt9.7%20positive%20selection%20images/p35m1%20gad2.tif
    Name to assign this image:gad2Tune
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:lrp8Tune
    Conversion method:Combine
    Image type:RGB
    Name the output image:lrp8Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:6|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enabled:False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
    Select the input image:lrp8Gray
    Name the output image:lrp8RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:lrp8Gray
    Name the primary objects to be identified:lrp8TuneObjects
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
OverlayOutlines:[module_num:8|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lrp8Tune
    Name the output image:lrp8QC
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#C6C6C6
    Select objects to display:lrp8TuneObjects

ColorToGray:[module_num:9|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
    Select the input image:lgfbpl1Tune
    Conversion method:Combine
    Image type:RGB
    Name the output image:lgfbpl1Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:10|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enabled:False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
    Select the input image:lgfbpl1Gray
    Name the output image:lgfbpl1RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:lgfbpl1Gray
    Name the primary objects to be identified:lgfbpl1TuneObjects
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
OverlayOutlines:[module_num:12|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lgfbpl1Tune
    Name the output image:lgfbpl1QC
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#B6B6B6
    Select objects to display:lgfbpl1TuneObjects

ColorToGray:[module_num:13|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
    Select the input image:gad2Tune
    Conversion method:Combine
    Image type:RGB
    Name the output image:gad2Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:14|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enabled:False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
    Select the input image:gad2Gray
    Name the output image:gad2RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:gad2Gray
    Name the primary objects to be identified:gad2TuneObjects
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
OverlayOutlines:[module_num:16|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:gad2Tune
    Name the output image:gad2QC
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#B6B6B6
    Select objects to display:gad2TuneObjects

ColorToGray:[module_num:17|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
    Select the input image:dapi
    Conversion method:Combine
    Image type:RGB
    Name the output image:dapiOrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:18|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
    Select the input image:lrp8
    Conversion method:Combine
    Image type:RGB
    Name the output image:lrp8OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:19|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
    Select the input image:lgfbpl1
    Conversion method:Combine
    Image type:RGB
    Name the output image:lgfbpl1OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:20|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
    Select the input image:gad2
    Conversion method:Combine
    Image type:RGB
    Name the output image:gad2OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:dapiOrigGray
    Name the primary objects to be identified:dapiObjects
    Typical diameter of objects, in pixel units (Min,Max):6,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:22|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
    Select the input image:lrp8OrigGray
    Name the primary objects to be identified:lrp8Objects
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_lrp8TuneObjects
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:lgfbpl1OrigGray
    Name the primary objects to be identified:lgfbpl1Objects
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_lgfbpl1TuneObjects
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
IdentifyPrimaryObjects:[module_num:24|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
    Select the input image:gad2OrigGray
    Name the primary objects to be identified:gad2Objects
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_gad2TuneObjects
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
RelateObjects:[module_num:25|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
    Parent objects:lrp8Objects
    Child objects:dapiObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:lrp8Positive
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
RelateObjects:[module_num:26|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
    Parent objects:lgfbpl1Objects
    Child objects:lrp8Positive
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:lrp8_lgfbpl1Positive
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
RelateObjects:[module_num:27|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
    Parent objects:gad2Objects
    Child objects:lrp8_lgfbpl1Positive
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:lrp8_lgfbpl1_gad2Positive
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
OverlayOutlines:[module_num:28|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lrp8
    Name the output image:lrp8Overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:white
    Select objects to display:lrp8Objects

OverlayOutlines:[module_num:29|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:gad2
    Name the output image:gad2Overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:white
    Select objects to display:gad2Objects

OverlayOutlines:[module_num:30|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:lgfbpl1
    Name the output image:lgfbpl1Overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:white
    Select objects to display:lgfbpl1Objects

ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents\FT Lab\SP23\Expt9.7 positive selection
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_dapiObjects,Image|Count_lgfbpl1Objects,Image|Count_lrp8Objects,Image|Count_lrp8_lgfbpl1_gad2Positive,Image|Count_gad2Objects
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
