CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:2
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "igfbpl1")
    Name to assign these images:igfbpl1
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "dapi")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "top2a")
    Name to assign these images:top2a
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/dsuno/Documents/FT%20Lab/SP23/Expt9.6%20negative%20selection/Expt9.6%20negative%20selection%20images-20240521T224857Z-001/Expt9.6%20negative%20selection%20images/p35m1%20top2a.tif   
    Name to assign this image:top2aTune
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/dsuno/Documents/FT%20Lab/SP23/Expt9.6%20negative%20selection/Expt9.6%20negative%20selection%20images-20240521T224857Z-001/Expt9.6%20negative%20selection%20images/p35m1%20igfbpl1.tif   
    Name to assign this image:igfbpl1Tune
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:top2aTune
    Conversion method:Combine
    Image type:RGB
    Name the output image:top2aTuneGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:top2aTuneGray
    Name the primary objects to be identified:top2aTuneObjects
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ColorToGray:[module_num:7|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
    Select the input image:igfbpl1Tune
    Conversion method:Combine
    Image type:RGB
    Name the output image:igfbpl1TuneGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:igfbpl1TuneGray
    Name the primary objects to be identified:igfbpl1TuneObjects
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:dapi
    Name the primary objects to be identified:dapiObject
    Typical diameter of objects, in pixel units (Min,Max):6,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ColorToGray:[module_num:10|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
    Select the input image:igfbpl1
    Conversion method:Combine
    Image type:RGB
    Name the output image:igfbpl1Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:11|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
    Select the input image:top2a
    Conversion method:Combine
    Image type:RGB
    Name the output image:top2aGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:igfbpl1Gray
    Name the primary objects to be identified:igfbpl1Object
    Typical diameter of objects, in pixel units (Min,Max):1,4
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_igfbpl1TuneObjects
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:top2aGray
    Name the primary objects to be identified:top2aObject
    Typical diameter of objects, in pixel units (Min,Max):1,4
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_top2aTuneObjects
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
RelateObjects:[module_num:14|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
    Parent objects:igfbpl1Object
    Child objects:dapiObject
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:igfbpl1Positive
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
RelateObjects:[module_num:15|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
    Parent objects:top2aObject
    Child objects:dapiObject
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:top2aPositive
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
MaskObjects:[module_num:16|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
    Select objects to be masked:igfbpl1Positive
    Name the masked objects:gaba2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:top2aObject
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents\\FT Lab\\SP23\\Expt9.6 negative selection
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_dapiObject,Image|Count_igfbpl1Positive,Image|Count_gaba2,Image|Count_top2aPositive
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
