CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "GRAY")
    Name to assign these images:rawImage
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "GRAY")
    Name to assign these images:groundTruth
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:rawImage
    Name the output image:IllumFunction
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:rawImage
    Name the output image:illumApply
    Select the illumination function:IllumFunction
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:7|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enabled:False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
    Select the input image:rawImage
    Name the primary objects to be identified:prediction
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
Threshold:[module_num:8|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enabled:False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
    Select the input image:illumApply
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Watershed:[module_num:9|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
    Select the input image:illumApply
    Name the output object:Watershed
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:rawImage
    Segmentation distance transform smoothing factor:2
    Minimum distance between seeds:2
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Watershed
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:11|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
    Select the objects to filter:Watershed
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Watershed
    Name the output image:predictionImage
    Select the color format:Binary (black & white)
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
MeasureImageOverlap:[module_num:13|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:groundTruth
    Select the image to be used to test for overlap:predictionImage
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:rawImage
    Name the primary objects to be identified:baselineObject
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:baselineObject
    Name the output image:baselinePrediction
    Select the color format:Binary (black & white)
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
MeasureImageOverlap:[module_num:16|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:groundTruth
    Select the image to be used to test for overlap:baselinePrediction
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rawImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:cyan
    Select objects to display:FilterObjects

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rawImage
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:baselineObject

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads\\pOverlap 0.3-20240814T212359Z-001\\pOverlap 0
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Overlap_Recall_baselinePrediction,Image|Overlap_Recall_predictionImage,Image|Overlap_Ffactor_predictionImage,Image|Overlap_Ffactor_baselinePrediction,Image|Overlap_Precision_predictionImage,Image|Overlap_Precision_baselinePrediction,Image|Count_baselineObject,Image|Count_Watershed
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:pOverlap_0
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
